PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MatchToSample
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Routines
  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr1
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    MouseComponent mouse_instructions
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine observation
    ImageComponent sample_observation
      image [set every repeat] = $Sample
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_observation
      clickable = [sample_observation]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine comparison
    ImageComponent sample_comparison
      image [set every repeat] = $Sample
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_comparison
      clickable = [stim1_comparison,stim2_comparison,stim3_comparison]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent stim1_comparison
      image [set every repeat] = $stim1
      pos = (-0.4,-0.26)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent stim2_comparison
      image [set every repeat] = $stim2
      pos = (0,-0.26)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent stim3_comparison
      image [set every repeat] = $stim3
      pos = (0.4,-0.26)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correcttrials=0
        totaltrials=0
        mastery_criteria=0
      End Routine:
        clickedname=mouse_comparison.clicked_name[0].split('_')[0]
        # clickedname = "stim1" OR "stim2" OR "stim3"
        # ".split(..." removes suffix from name
        thisExp.addData('clickedname',clickedname)
        # add it to our output data

        trialcorrect=clickedname==correctstim
        # trialcorrect = TRUE (1) or FALSE (0)
        # compare the clicked element to the correct stim provided by CueTbl
        thisExp.addData('trialcorrect',trialcorrect)
        # add it to our output data

        # update trial counters
        correcttrials+=trialcorrect # (1 or 0)
        totaltrials+=1

        # control feedback message
        if trialcorrect:
            msg_feedback=f"Correct! Nice Job! \n You got {str(correcttrials)} out of {str(totaltrials)} correct!"
        else:
            msg_feedback="Try Again!"

        accuracy=correcttrials/totaltrials
        # get accuracy to compare against mastery criteria

        passedBlock=accuracy>=mastery_criteria
        # passedBlock = TRUE (1) or FALSE (0)
        # if accuracy is over mastery criteria, they passed

        thisExp.addData('passedBlock',passedBlock)
        # record whether or not participant passed the block

        # control block feedback message
        if passedBlock:
            msg_blockfeedback=f"You passed that block! Nice job!"
            # populate a passed/good message
        else:
            msg_blockfeedback=f"You failed that block! Try Again!"
            # populate a failed/bad message
  Routine feedback
    TextComponent text_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg_feedback
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  Routine block_feedback
    TextComponent text_blockfeedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_blockfeedback
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    MouseComponent mouse_blockfeedback
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if passedBlock:
            repeat_block.finished=True
        # if the participant passes the previous block
        # then this will break us out of the "repeat_block" loop
        # otherwise it will continue to repeat
  Routine reset_count
    TextComponent text_startblock
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $BlockMessage
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        correcttrials=0
        totaltrials=0
  Routine block_feedback_posttest
    TextComponent text_blockfeedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_blockfeedback
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    MouseComponent mouse_blockfeedback_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if not passedBlock:
            msg_posttest="You will be reset to the training phase."
            # let participants know they are being reset
            block_posttest.finished=True
            # if the participant FAILS the previous block
            # then this will break us out of the "block posttest" loop
            # and skip whatever post-test tasks there are left

        else:
            msg_posttest="You passed! \nThanks for taking this experiment!"
            # friendly exit message for when they pass
  Routine check_posttest
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if passedBlock:
            repeat_task.finished=True
        # if the participant passes the previous block
        # then this will break us out of the "repeat_block" loop
        # otherwise it will continue to repeat
    TextComponent text_posttest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg_posttest
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Flow
  LoopInitiator trials_instructions loopType="TrialHandler"
    conditionsFile = excel/instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator trials_instructions
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = excel/pretest_blocktable.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_pretest loopType="TrialHandler"
      conditionsFile = $CueTbl
      loopType = random
      nReps = 1
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      Routine observation
      Routine comparison
    LoopTerminator trials_pretest
  LoopTerminator block_loop
  LoopInitiator repeat_task loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 50
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    LoopInitiator block_training loopType="TrialHandler"
      conditionsFile = excel/training_blocktable.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      LoopInitiator repeat_block loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 50
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        Routine reset_count
        LoopInitiator trials_training loopType="TrialHandler"
          conditionsFile = $CueTbl
          loopType = random
          nReps = 1
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          Routine observation
          Routine comparison
          Routine feedback
        LoopTerminator trials_training
        Routine block_feedback
      LoopTerminator repeat_block
    LoopTerminator block_training
    LoopInitiator block_posttest loopType="TrialHandler"
      conditions = [{'CueTbl': 'excel/1BLAB.xlsx', 'BlockMessage': 'You are now entering a Testing Block! You will NOT receive feedback for each trial!'}]
      conditionsFile = excel/posttest_blocktable.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine reset_count
      LoopInitiator trials_posttest loopType="TrialHandler"
        conditionsFile = $CueTbl
        loopType = random
        nReps = 1
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        Routine observation
        Routine comparison
      LoopTerminator trials_posttest
      Routine block_feedback_posttest
    LoopTerminator block_posttest
    Routine check_posttest
  LoopTerminator repeat_task
